open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/19/3D_19_p0_d270_s1_sZ1.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0); //5x5 ROI : tumor
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/19/3D_19_p1_d270_s1_sZ1.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/19/3D_19_p2_d270_s1_sZ1.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);



open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/19/3D_19_p3_d270_s1_sZ1.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);



open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/19/3D_19_p4_d270_s1_sZ1.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/19/3D_19_p5_d270_s1_sZ1.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/19/3D_19_p6_d270_s1_sZ1.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/19/3D_19_p7_d270_s1_sZ1.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/19/3D_19_p8_d270_s1_sZ1.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/19/3D_19_p9_d270_s1_sZ1.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);
