
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831615721736.29/29_p0_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 1); //5x5 ROI :Lung
wait(500);
run("Measure");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831615721736.29/29_p1_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 1);
wait(500);
run("Measure");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831615721736.29/29_p2_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 1);
wait(500);
run("Measure");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831615721736.29/29_p3_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 1);
wait(500);
run("Measure");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831615721736.29/29_p4_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 1);
wait(500);
run("Measure");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831615721736.29/29_p5_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 1);
wait(500);
run("Measure");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831615721736.29/29_p6_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 1);
wait(500);
run("Measure");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831615721736.29/29_p7_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 1);
wait(500);
run("Measure");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831615721736.29/29_p8_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 1);
wait(500);
run("Measure");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831615721736.29/29_p9_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 1);
wait(500);
run("Measure");
close();