open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/24/24_p0_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0); //5x5 ROI : tumor
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/24/24_p1_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/24/24_p2_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);



open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/24/24_p3_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);



open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/24/24_p4_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/24/24_p5_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/24/24_p6_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/24/24_p7_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/24/24_p8_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/24/24_p9_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);
