open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/32/32_p0_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0); //5x5 ROI : tumor
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/32/32_p1_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/32/32_p2_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);



open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/32/32_p3_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);



open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/32/32_p4_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/32/32_p5_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/32/32_p6_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/32/32_p7_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/32/32_p8_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/32/32_p9_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
run("Previous Slice [<]");
run("Next Slice [>]");
roiManager("Select", 0);
wait(500);
