open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/21_p0_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 0);
run("Crop");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/Tumor Crop/21_p0_d270_s1_sZ1spr_000_hann_080.png");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/21_p1_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 0);
run("Crop");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/Tumor Crop/21_p1_d270_s1_sZ1spr_000_hann_080.png");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/21_p2_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 0);
run("Crop");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/Tumor Crop/21_p2_d270_s1_sZ1spr_000_hann_080.png");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/21_p3_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 0);
run("Crop");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/Tumor Crop/21_p3_d270_s1_sZ1spr_000_hann_080.png");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/21_p4_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 0);
run("Crop");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/Tumor Crop/21_p4_d270_s1_sZ1spr_000_hann_080.png");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/21_p5_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 0);
run("Crop");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/Tumor Crop/21_p5_d270_s1_sZ1spr_000_hann_080.png");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/21_p6_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 0);
run("Crop");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/Tumor Crop/21_p6_d270_s1_sZ1spr_000_hann_080.png");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/21_p7_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 0);
run("Crop");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/Tumor Crop/21_p7_d270_s1_sZ1spr_000_hann_080.png");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/21_p8_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 0);
run("Crop");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/Tumor Crop/21_p8_d270_s1_sZ1spr_000_hann_080.png");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/21_p9_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 0);
run("Crop");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/21/Tumor Crop/21_p9_d270_s1_sZ1spr_000_hann_080.png");
close();