open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831613550471.24/24_p0_d270_s1_sZ1spr_000_hann_080.mha");

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831613550471.24/24_p1_d270_s1_sZ1spr_000_hann_080.mha");
imageCalculator("Subtract create 32-bit stack", "24_p1_d270_s1_sZ1spr_000_hann_080.mha","24_p0_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 3);
wait(500)
selectWindow("24_p1_d270_s1_sZ1spr_000_hann_080.mha");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831613550471.24/24_p2_d270_s1_sZ1spr_000_hann_080.mha");
imageCalculator("Subtract create 32-bit stack", "24_p2_d270_s1_sZ1spr_000_hann_080.mha","24_p0_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 3);
wait(500)
selectWindow("24_p2_d270_s1_sZ1spr_000_hann_080.mha");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831613550471.24/24_p3_d270_s1_sZ1spr_000_hann_080.mha");
imageCalculator("Subtract create 32-bit stack", "24_p3_d270_s1_sZ1spr_000_hann_080.mha","24_p0_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 3);
wait(500)
selectWindow("24_p3_d270_s1_sZ1spr_000_hann_080.mha");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831613550471.24/24_p4_d270_s1_sZ1spr_000_hann_080.mha");
imageCalculator("Subtract create 32-bit stack", "24_p4_d270_s1_sZ1spr_000_hann_080.mha","24_p0_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 3);
wait(500)
selectWindow("24_p4_d270_s1_sZ1spr_000_hann_080.mha");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831613550471.24/24_p5_d270_s1_sZ1spr_000_hann_080.mha");
imageCalculator("Subtract create 32-bit stack", "24_p5_d270_s1_sZ1spr_000_hann_080.mha","24_p0_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 3);
wait(500)
selectWindow("24_p5_d270_s1_sZ1spr_000_hann_080.mha");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831613550471.24/24_p6_d270_s1_sZ1spr_000_hann_080.mha");
imageCalculator("Subtract create 32-bit stack", "24_p6_d270_s1_sZ1spr_000_hann_080.mha","24_p0_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 3);
wait(500)
selectWindow("24_p6_d270_s1_sZ1spr_000_hann_080.mha");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831613550471.24/24_p7_d270_s1_sZ1spr_000_hann_080.mha");
imageCalculator("Subtract create 32-bit stack", "24_p7_d270_s1_sZ1spr_000_hann_080.mha","24_p0_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 3);
wait(500)
selectWindow("24_p7_d270_s1_sZ1spr_000_hann_080.mha");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831613550471.24/24_p8_d270_s1_sZ1spr_000_hann_080.mha");
imageCalculator("Subtract create 32-bit stack", "24_p8_d270_s1_sZ1spr_000_hann_080.mha","24_p0_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 3);
wait(500)
selectWindow("24_p8_d270_s1_sZ1spr_000_hann_080.mha");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.141000201831613550471.24/24_p9_d270_s1_sZ1spr_000_hann_080.mha");
imageCalculator("Subtract create 32-bit stack", "24_p9_d270_s1_sZ1spr_000_hann_080.mha","24_p0_d270_s1_sZ1spr_000_hann_080.mha");
roiManager("Select", 3);
wait(500)
selectWindow("24_p9_d270_s1_sZ1spr_000_hann_080.mha");
close();

