
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/38/38_p0_d270_s1_sZ1spr_000_hann_080.mha");
run("Multiply...", "value=1000.00000 stack");
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
wait(500);
setThreshold(6.90, 11.00);
run("Convert to Mask");
wait(500);
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
run("Duplicate...", " ");
run("Analyze Particles...", "size=200-700 show=Ellipses display exclude clear include summarize add");


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/38/38_p1_d270_s1_sZ1spr_000_hann_080.mha");
run("Multiply...", "value=1000.00000 stack");
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
wait(500);
setThreshold(6.90, 11.00);
run("Convert to Mask");
wait(500);
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
run("Duplicate...", " ");
run("Analyze Particles...", "size=200-700 show=Ellipses display exclude clear include summarize add");


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/38/38_p2_d270_s1_sZ1spr_000_hann_080.mha");
run("Multiply...", "value=1000.00000 stack");
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
wait(500);
setThreshold(6.90, 11.00);
run("Convert to Mask");
wait(500);
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
run("Duplicate...", " ");
run("Analyze Particles...", "size=200-700 show=Ellipses display exclude clear include summarize add");


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/38/38_p3_d270_s1_sZ1spr_000_hann_080.mha");
run("Multiply...", "value=1000.00000 stack");
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
wait(500);
setThreshold(6.90, 11.00);
run("Convert to Mask");
wait(500);
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
run("Duplicate...", " ");
run("Analyze Particles...", "size=200-700 show=Ellipses display exclude clear include summarize add");



open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/38/38_p4_d270_s1_sZ1spr_000_hann_080.mha");
run("Multiply...", "value=1000.00000 stack");
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
wait(500);
setThreshold(6.90, 11.00);
run("Convert to Mask");
wait(500);
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
run("Duplicate...", " ");
run("Analyze Particles...", "size=200-700 show=Ellipses display exclude clear include summarize add");


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/38/38_p5_d270_s1_sZ1spr_000_hann_080.mha");
run("Multiply...", "value=1000.00000 stack");
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
wait(500);
setThreshold(6.90, 11.00);
run("Convert to Mask");
wait(500);
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
run("Duplicate...", " ");
run("Analyze Particles...", "size=200-700 show=Ellipses display exclude clear include summarize add");


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/38/38_p6_d270_s1_sZ1spr_000_hann_080.mha");
run("Multiply...", "value=1000.00000 stack");
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
wait(500);
setThreshold(6.90, 11.00);
run("Convert to Mask");
wait(500);
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
run("Duplicate...", " ");
run("Analyze Particles...", "size=200-700 show=Ellipses display exclude clear include summarize add");


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/38/38_p7_d270_s1_sZ1spr_000_hann_080.mha");
run("Multiply...", "value=1000.00000 stack");
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
wait(500);
setThreshold(6.90, 11.00);
run("Convert to Mask");
wait(500);
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
run("Duplicate...", " ");
run("Analyze Particles...", "size=200-700 show=Ellipses display exclude clear include summarize add");


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/38/38_p8_d270_s1_sZ1spr_000_hann_080.mha");
run("Multiply...", "value=1000.00000 stack");
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
wait(500);
setThreshold(6.90, 11.00);
run("Convert to Mask");
wait(500);
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
run("Duplicate...", " ");
run("Analyze Particles...", "size=200-700 show=Ellipses display exclude clear include summarize add");


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/38/38_p9_d270_s1_sZ1spr_000_hann_080.mha");
run("Multiply...", "value=1000.00000 stack");
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
wait(500);
setThreshold(6.90, 11.00);
run("Convert to Mask");
wait(500);
run("Specify...", "width=64 height=105 x=94 y=80 slice=123");
run("Duplicate...", " ");
run("Analyze Particles...", "size=200-700 show=Ellipses display exclude clear include summarize add");




selectWindow("38_p0_d270_s1_sZ1spr_000_hann_080-1.mha");
run("Measure");
selectWindow("38_p1_d270_s1_sZ1spr_000_hann_080-1.mha");
run("Measure");
selectWindow("38_p2_d270_s1_sZ1spr_000_hann_080-1.mha");
run("Measure");
selectWindow("38_p3_d270_s1_sZ1spr_000_hann_080-1.mha");
run("Measure");
selectWindow("38_p4_d270_s1_sZ1spr_000_hann_080-1.mha");
run("Measure");
selectWindow("38_p5_d270_s1_sZ1spr_000_hann_080-1.mha");
run("Measure");
selectWindow("38_p6_d270_s1_sZ1spr_000_hann_080-1.mha");
run("Measure");
selectWindow("38_p7_d270_s1_sZ1spr_000_hann_080-1.mha");
run("Measure");
selectWindow("38_p8_d270_s1_sZ1spr_000_hann_080-1.mha");
run("Measure");
selectWindow("38_p9_d270_s1_sZ1spr_000_hann_080-1.mha");
run("Measure");


