open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/27/size 0.25/27_p0_d270_s0.25_sZ0.25spr_000_hann_080.mha");
selectWindow("27_p0_d270_s0.25_sZ0.25spr_000_hann_080.mha");
wait(500);
run("Specify...", "width=270 height=270 x=0 y=0 slice=139");
saveAs("PNG", "/Users/mwaqar/4DCBCT_Project/Report/27/27_p0_d270_s0.25_sZ0.25spr_000_hann_080.png");

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/27/size 0.25/27_p1_d270_s0.25_sZ0.25spr_000_hann_080.mha");
selectWindow("27_p1_d270_s0.25_sZ0.25spr_000_hann_080.mha");
wait(500);
run("Specify...", "width=270 height=270 x=0 y=0 slice=139");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Report/27/35_p1_d270_s0.25_sZ0.25spr_000_hann_080.jpg");


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/27/size 0.25/27_p2_d270_s0.25_sZ0.25spr_000_hann_080.mha");
selectWindow("27_p2_d270_s0.25_sZ0.25spr_000_hann_080.mha");
wait(500);
run("Specify...", "width=270 height=270 x=0 y=0 slice=139");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Report/27/35_p2_d270_s0.25_sZ0.25spr_000_hann_080.jpg");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/27/size 0.25/27_p3_d270_s0.25_sZ0.25spr_000_hann_080.mha");
selectWindow("27_p3_d270_s0.25_sZ0.25spr_000_hann_080.mha");
wait(500);
run("Specify...", "width=270 height=270 x=0 y=0 slice=139");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Report/27/35_p3_d270_s0.25_sZ0.25spr_000_hann_080.jpg");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/27/size 0.25/27_p4_d270_s0.25_sZ0.25spr_000_hann_080.mha");
selectWindow("27_p4_d270_s0.25_sZ0.25spr_000_hann_080.mha");
wait(500);
run("Specify...", "width=270 height=270 x=0 y=0 slice=139");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Report/27/35_p4_d270_s0.25_sZ0.25spr_000_hann_080.jpg");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/27/size 0.25/27_p5_d270_s0.25_sZ0.25spr_000_hann_080.mha");
selectWindow("27_p5_d270_s0.25_sZ0.25spr_000_hann_080.mha");
wait(500);
run("Specify...", "width=270 height=270 x=0 y=0 slice=139");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Report/27/35_p5_d270_s0.25_sZ0.25spr_000_hann_080.jpg");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/27/size 0.25/27_p6_d270_s0.25_sZ0.25spr_000_hann_080.mha");
selectWindow("27_p6_d270_s0.25_sZ0.25spr_000_hann_080.mha");
wait(500);
run("Specify...", "width=270 height=270 x=0 y=0 slice=139");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Report/27/35_p6_d270_s0.25_sZ0.25spr_000_hann_080.jpg");
close();


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/27/size 0.25/27_p7_d270_s0.25_sZ0.25spr_000_hann_080.mha");
selectWindow("27_p7_d270_s0.25_sZ0.25spr_000_hann_080.mha");
wait(500);
run("Specify...", "width=270 height=270 x=0 y=0 slice=139");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Report/27/35_p7_d270_s0.25_sZ0.25spr_000_hann_080.jpg");
close();

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/27/size 0.25/27_p8_d270_s0.25_sZ0.25spr_000_hann_080.mha");
selectWindow("27_p8_d270_s0.25_sZ0.25spr_000_hann_080.mha");
wait(500);
run("Specify...", "width=270 height=270 x=0 y=0 slice=139");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Report/27/35_p8_d270_s0.25_sZ0.25spr_000_hann_080.jpg");

close();
