

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.14100020183161187236.21/21_p0_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 3); //Line
wait(500);

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.14100020183161187236.21/21_p1_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 3);
wait(500);

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.14100020183161187236.21/21_p2_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 3);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.14100020183161187236.21/21_p3_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 3);
wait(500);



open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.14100020183161187236.21/21_p4_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 3);
wait(500);

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.14100020183161187236.21/21_p5_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 3);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.14100020183161187236.21/21_p6_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 3);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.14100020183161187236.21/21_p7_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 3);
wait(500);


open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.14100020183161187236.21/21_p8_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 3);
wait(500);

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.14100020183161187236.21/21_p9_d270_s1_sZ1spr_000_hann_080.mha");
run("In [+]");
run("In [+]");
run("In [+]");
roiManager("Select", 3);
wait(500);
