
//--------------------------------------SPR 0.00

//-------------------------- hann 0.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.00_hann_0.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.00_hann_0.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.00_hann_0.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.00_hann_0.0_d410_s1_sZ1.jpg");
close();


//-------------------------- hann 0.80

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.00_hann_0.8_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.00_hann_0.8_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.00_hann_0.8_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.00_hann_0.8_d410_s1_sZ1.jpg");
close();


//--------------------------hann 1.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.00_hann_1.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.00_hann_1.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.00_hann_1.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.00_hann_1.0_d410_s1_sZ1.jpg");
close();


//--------------------------hann 5.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.00_hann_5.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.00_hann_5.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.00_hann_5.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.00_hann_5.0_d410_s1_sZ1.jpg");
close();

//-------------------------------------- SPR0.24
//-------------------------- hann 0.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.24_hann_0.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.24_hann_0.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.24_hann_0.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.24_hann_0.0_d410_s1_sZ1.jpg");
close();


//-------------------------- hann 0.80

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.24_hann_0.8_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.24_hann_0.8_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.24_hann_0.8_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.24_hann_0.8_d410_s1_sZ1.jpg");
close();


//--------------------------hann 1.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.24_hann_1.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.24_hann_1.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.24_hann_1.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.24_hann_1.0_d410_s1_sZ1.jpg");
close();


//--------------------------hann 5.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.24_hann_5.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.24_hann_5.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.24_hann_5.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.24_hann_5.0_d410_s1_sZ1.jpg");
close();

//-------------------------------------- SPR0.50
//-------------------------- hann 0.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.50_hann_0.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.50_hann_0.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.50_hann_0.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.50_hann_0.0_d410_s1_sZ1.jpg");
close();


//-------------------------- hann 0.80

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.50_hann_0.8_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.50_hann_0.8_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.50_hann_0.8_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.50_hann_0.8_d410_s1_sZ1.jpg");
close();


//--------------------------hann 1.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.50_hann_1.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.50_hann_1.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.50_hann_1.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.50_hann_1.0_d410_s1_sZ1.jpg");
close();


//--------------------------hann 5.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.50_hann_5.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.50_hann_5.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.50_hann_5.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.50_hann_5.0_d410_s1_sZ1.jpg");
close();

//-------------------------------------- SPR0.75
//-------------------------- hann 0.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.75_hann_0.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.75_hann_0.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.75_hann_0.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.75_hann_0.0_d410_s1_sZ1.jpg");
close();


//-------------------------- hann 0.80

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.75_hann_0.8_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.75_hann_0.8_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.75_hann_0.8_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.75_hann_0.8_d410_s1_sZ1.jpg");
close();


//--------------------------hann 1.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.75_hann_1.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.75_hann_1.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.75_hann_1.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.75_hann_1.0_d410_s1_sZ1.jpg");
close();


//--------------------------hann 5.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_0.75_hann_5.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_0.75_hann_5.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_0.75_hann_5.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_0.75_hann_5.0_d410_s1_sZ1.jpg");
close();


//-------------------------------------- SPR2.40
//-------------------------- hann 0.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_2.40_hann_0.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_2.40_hann_0.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_2.40_hann_0.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_2.40_hann_0.0_d410_s1_sZ1.jpg");
close();


//-------------------------- hann 0.80

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_2.40_hann_0.8_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_2.40_hann_0.8_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_2.40_hann_0.8_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_2.40_hann_0.8_d410_s1_sZ1.jpg");
close();


//--------------------------hann 1.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_2.40_hann_1.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_2.40_hann_1.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_2.40_hann_1.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_2.40_hann_1.0_d410_s1_sZ1.jpg");
close();


//--------------------------hann 5.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_2.40_hann_5.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_2.40_hann_5.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_2.40_hann_5.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_2.40_hann_5.0_d410_s1_sZ1.jpg");
close();



//-------------------------------------- SPR _24.0
//-------------------------- hann 0.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_24.0_hann_0.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_24.0_hann_0.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_24.0_hann_0.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_24.0_hann_0.0_d410_s1_sZ1.jpg");
close();


//-------------------------- hann 0.80

open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_24.0_hann_0.8_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_24.0_hann_0.8_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_24.0_hann_0.8_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_24.0_hann_0.8_d410_s1_sZ1.jpg");
close();


//--------------------------hann 1.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_24.0_hann_1.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_24.0_hann_1.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_24.0_hann_1.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_24.0_hann_1.0_d410_s1_sZ1.jpg");
close();


//--------------------------hann 5.00
open("/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/3D_11_68640_n0003725_spr_24.0_hann_5.0_d410_s1_sZ1.mha");
run("Reslice [/]...", "output=1.000 start=Left");
run("Rotate 90 Degrees Right");
run("Flip Horizontally", "stack");
run("ROI Manager...");
roiManager("Open", "/Users/mwaqar/4DCBCT-Code-Repository/In dev/ImageJ Macro/slice230full.roi");
roiManager("Select", 0);
selectWindow("3D_11_68640_n0003725_spr_24.0_hann_5.0_d410_s1_sZ1.mha");
close();
selectWindow("Reslice of 3D_11_68640_n0003725_spr_24.0_hann_5.0_d410_s1_sZ1");
saveAs("Jpeg", "/Users/mwaqar/4DCBCT_Project/Expriment_2_recon/img_1.3.46.423632.1410002018315232436205.11/sprTest/jpg/Reslice of 3D_11_68640_n0003725_spr_24.0_hann_5.0_d410_s1_sZ1.jpg");
close();
